PsychoPy2experiment version="2024.1.5"
Settings
  Data file delimiter = comma
  Enable Escape = False
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'Age': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 2
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1200]
  colPriority = {'': ''}
  expName = EmotionVR_task
  keyboardBackend = ioHub
  logging level = data
  runMode = 1
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Routines
  Routine fixation_routine
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    PolygonComponent fixationCross
      fillColor = white
      shape = cross
      size = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 16
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    CodeComponent code_5
      Code Type = Py
      Begin Experiment:
        break_counter = 0
      Begin Routine:
        outlet.push_sample(x=[blocknumber])
        break_counter += 1
  Routine trial_routine
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        iti = 0
      Begin Routine:
        iti = randint(5,15)*0.05
    ImageComponent trialImage
      image [set every repeat] = $filepaths
      size = [1, 1]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent jitter
      letterHeight = 0.05
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = $iti
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        outlet.push_sample(x=[marker])
  Routine task_routine
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    ImageComponent taskImage
      image [set every repeat] = $tasknames
      size = [1, 1]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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    TextComponent taskText
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, 0.475)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text = Did you see this image? Press y for Yes, n for No
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    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        outlet.push_sample(x=[taskmarker])
  Routine Instruction_routine
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    TextComponent instructionText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.50
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      text:
        Welcome to the experiment!

        Here are the instructions:

        1. In phase 1, you will be presented with 8 faces in rapid succession, pay very careful attention to these images.

        2. In phase 2, you will be shown a single face. Your task is to determine if you saw that face in phase 1 (first 8 faces).

        3. Press y for Yes, or n for No

        When you are ready: Press SPACEBAR to continue
    KeyboardComponent InstructionResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Py
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      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet # import required classes
        info = StreamInfo(name='Trigger', type='Markers', channel_count=1,
        channel_format='int32', source_id='Example') # sets variables for object info
        outlet = StreamOutlet(info) # initialize stream.
  Routine break_routine
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    TextComponent break_text
      letterHeight = 0.05
      startVal [time (s)] = 0
      wrapWidth = 1.75
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      text:
        Take a break!

        When you are ready: Press SPACEBAR to continue
    KeyboardComponent breakResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
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    TextComponent text
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(break_counter) + " blocks out of 56 done!"
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        if break_counter % 7 != 0 or break_counter == 56:
            continueRoutine = False
    ProgressComponent prog
      anchor = bottom-left
      borderColor = white
      fillColor = None
      lineWidth = 4
      pos = (-0.5, -0.5)
      progress [set every repeat] = break_counter / 56
      size = (1, 0.1)
      startVal [time (s)] = 0
      units = height
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  Routine thank_you_routine
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    TextComponent thankYouText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thank you for participating in this study, you are done!
      wrapWidth = 1.50
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Flow
  Routine Instruction_routine
  LoopInitiator blocks_stim loopType="TrialHandler"
    conditionsFile = blocks.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'blocknames': 'block1VirtualSURPRISE.xlsx', 'tasknames': 'UIBVFED_cropped/SURPRISE/Cristina_Surprise.png', 'marker': 66},
      {'blocknames': 'block2VirtualFEAR.xlsx', 'tasknames': 'UIBVFED_cropped/FEAR/Wanda_Terror.png', 'marker': 19},
      {'blocknames': 'block3VirtualANGER.xlsx', 'tasknames': 'UIBVFED_cropped/ANGER/Tomeu_EnragedShouting.png', 'marker': 24},
      {'blocknames': 'block4RealJOY.xlsx', 'tasknames': 'RADIATE Color Faces/RADIATE_COLOR_7/HM02/HM02_HC.bmp', 'marker': 102},
      {'blocknames': 'block5RealSADNESS.xlsx', 'tasknames': 'RADIATE Color Faces/RADIATE_COLOR_10/WM11/WM11_SC.bmp', 'marker': 141},
      {'blocknames': 'block6RealNEUTRAL.xlsx', 'tasknames': 'RADIATE Color Faces/RADIATE_COLOR_8/WF05/WF05_NC.bmp', 'marker': 159},
      {'blocknames': 'block7VirtualDISGUST.xlsx', 'tasknames': 'UIBVFED_cropped/DISGUST/Lluis_PhysicalRepulsion.png', 'marker': 32},
      {'blocknames': 'block8RealDISGUST.xlsx', 'tasknames': 'RADIATE Color Faces/RADIATE_COLOR_10/WM11/WM11_DC.bmp', 'marker': 131},
      {'blocknames': 'block9RealJOY.xlsx', 'tasknames': 'RADIATE Color Faces/RADIATE_COLOR_7/HM02/HM02_HC.bmp', 'marker': 102},
      {'blocknames': 'block10VirtualSURPRISE.xlsx', 'tasknames': 'UIBVFED_cropped/SURPRISE/Ramon_Surprise.png', 'marker': 63}]
    Routine fixation_routine
    LoopInitiator trials_stim loopType="TrialHandler"
      conditionsFile = $blocknames
      loopType = sequential
      nReps = 1
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      Routine trial_routine
    LoopTerminator trials_stim
    Routine task_routine
    Routine break_routine
  LoopTerminator blocks_stim
